PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = empathy_intonation_perc
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Routines
  Routine trial
    TextComponent text_eq_question_trial
      letterHeight = 0.06
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $item
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    SliderComponent slider_eq_trial
      forceEndRoutine = True
      granularity = 1
      labels = 'strongly agree', 'slightly agree', 'slightly disagree', 'strongly disagree'
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.8, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ('rating', 'triangleMarker')
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    KeyboardComponent key_resp_eq_trial
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator eq_trials loopType="TrialHandler"
    conditionsFile = trials/eq_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('item_num', 1), ('item', 'I can easily tell if someone else wants to enter a conversation.'), ('is_test_item', 1), ('is_distractor', 0), ('is_agree_score', 1), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 2), ('item', 'I prefer animals to humans.'), ('is_test_item', 0), ('is_distractor', 1), ('is_agree_score', 0), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 3), ('item', 'I try to keep up with the current trends and fashions.'), ('is_test_item', 0), ('is_distractor', 1), ('is_agree_score', 0), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 4), ('item', 'I find it difficult to explain to others things that I understand easily, \n  when they don’t understand it first time.'), ('is_test_item', 1), ('is_distractor', 0), ('is_agree_score', 0), ('is_disagree_score', 1)]),
      OrderedDict([('item_num', 5), ('item', 'I dream most nights.'), ('is_test_item', 0), ('is_distractor', 1), ('is_agree_score', 0), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 6), ('item', 'I really enjoy caring for other people.'), ('is_test_item', 1), ('is_distractor', 0), ('is_agree_score', 1), ('is_disagree_score', 0)]),
      OrderedDict([('item_num', 7), ('item', 'I try to solve my own problems rather than discussing them with others.'), ('is_test_item', 0), ('is_distractor', 1), ('is_agree_score', 0), ('is_disagree_score', 0)])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
    Routine trial
  LoopTerminator eq_trials
